CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_A488_P63.tif")
    Name to assign these images:P63
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_CY3_RELA.tif")
    Name to assign these images:RELA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_CY5_CK5.tif")
    Name to assign these images:CK5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_DAPI.tif")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nucleus
    Name the primary objects to be identified:NuclearMasks
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:NuclearMasks
    Name the objects to be identified:CK5Mask
    Select the method to identify the secondary objects:Propagation
    Select the input image:CK5
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:CK5Mask
    Select the smaller identified objects:NuclearMasks
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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
    Hidden:2
    Select an image to measure:P63
    Select an image to measure:Nucleus
    Select objects to measure:Cytoplasm
    Select objects to measure:NuclearMasks

MeasureGranularity:[module_num:9|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
    Image count:2
    Object count:1
    Select an image to measure:Nucleus
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:20
    Select objects to measure:NuclearMasks
    Object count:2
    Select an image to measure:P63
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:20
    Select objects to measure:NuclearMasks
    Select objects to measure:Cytoplasm

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ActivationPaper_Granularity
    Overwrite existing files without warning?:Yes
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