CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CK5")
    Name to assign these images:CK5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "p63") (file does contain "16bit") (file doesnot contain "32bit")
    Name to assign these images:Image_p63
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "p63") (file doesnot contain "16bit") (file does contain "32bit")
    Name to assign these images:Quant_p63
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CK5
    Name the primary objects to be identified:CK5_IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:.3,1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI
    Name the primary objects to be identified:DAPI_IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:1
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    Thresholding method:Otsu

RelateObjects:[module_num:7|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
    Parent objects:DAPI_IdentifyPrimaryObjects
    Child objects:CK5_IdentifyPrimaryObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:DAPIPos_CK5_RelateObjects
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
MaskObjects:[module_num:8|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
    Select objects to be masked:DAPIPos_CK5_RelateObjects
    Name the masked objects:MaskedNuclei_CK5
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:DAPI_IdentifyPrimaryObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:Quant_p63
    Select objects to measure:DAPIPos_CK5_RelateObjects
    Select objects to measure:MaskedNuclei_CK5

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:DAPIPos_CK5_RelateObjects
    Select objects to measure:MaskedNuclei_CK5
    Calculate the Zernike features?:Yes

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CK5
    Name the output image:CK5_Overlay_CK5
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB02FE
    Select objects to display:DAPIPos_CK5_RelateObjects

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CK5_Overlay_CK5
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CK5_Overlay_CK5_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/Extreme SSD/03012021 CBC Timecourse/Vehicle/CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Image_p63
    Name the output image:CK5_Overlay_p63
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB02FE
    Select objects to display:DAPIPos_CK5_RelateObjects

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CK5_Overlay_p63
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CK5_Overlay_p63_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/Extreme SSD/03012021 CBC Timecourse/Vehicle/CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Image_p63
    Name the output image:All_Overlay_p63
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB02FE
    Select objects to display:DAPIPos_CK5_RelateObjects
    Select outline color:#0F7FFE
    Select objects to display:MaskedNuclei_CK5

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:All_Overlay_p63
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:All_Overlay_p63_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/Extreme SSD/03012021 CBC Timecourse/Vehicle/CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:All_Overlay_DAPI
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB02FE
    Select objects to display:DAPIPos_CK5_RelateObjects
    Select outline color:#0F7FFE
    Select objects to display:MaskedNuclei_CK5

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:All_Overlay_DAPI
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:All_Overlay_DAPI_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/Extreme SSD/03012021 CBC Timecourse/Vehicle/CellProfiler_Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/Extreme SSD/03012021 CBC Timecourse/CSVs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:MaskedNuclei_CK5|Parent_DAPIPos_CK5_RelateObjects,MaskedNuclei_CK5|Number_Object_Number,MaskedNuclei_CK5|Intensity_MassDisplacement_Quant_p63,MaskedNuclei_CK5|Intensity_MinIntensity_Quant_p63,MaskedNuclei_CK5|Intensity_IntegratedIntensityEdge_Quant_p63,MaskedNuclei_CK5|Intensity_StdIntensity_Quant_p63,MaskedNuclei_CK5|Intensity_UpperQuartileIntensity_Quant_p63,MaskedNuclei_CK5|Intensity_LowerQuartileIntensity_Quant_p63,MaskedNuclei_CK5|Intensity_MinIntensityEdge_Quant_p63,MaskedNuclei_CK5|Intensity_MADIntensity_Quant_p63,MaskedNuclei_CK5|Intensity_IntegratedIntensity_Quant_p63,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Vehicle_03012021_CBC_Timecourse_
    Overwrite existing files without warning?:No
    Data to export:DAPIPos_CK5_RelateObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MaskedNuclei_CK5
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
