CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_P63.tif")
    Name to assign these images:P63
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_RELA.tif")
    Name to assign these images:RELA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_CK5.tif")
    Name to assign these images:CK5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_DAPI.tif")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nucleus
    Name the primary objects to be identified:NuclearMasks
    Typical diameter of objects, in pixel units (Min,Max):15,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:NuclearMasks
    Name the objects to be identified:CK5Mask
    Select the method to identify the secondary objects:Propagation
    Select the input image:CK5
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:CK5Mask
    Select the smaller identified objects:NuclearMasks
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:8|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
    Hidden:3
    Select an image to measure:P63
    Select an image to measure:RELA
    Select an image to measure:CK5
    Select objects to measure:Cytoplasm
    Select objects to measure:NuclearMasks

CalculateMath:[module_num:9|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
    Name the output measurement:IntensityRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:NuclearMasks
    Select the numerator measurement:Intensity_IntegratedIntensity_RELA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_IntegratedIntensity_RELA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:NuclearMasks
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CK5Mask|Parent_NuclearMasks,CK5Mask|Location_Center_Y,CK5Mask|Location_Center_X,CK5Mask|Location_Center_Z,CK5Mask|Children_Cytoplasm_Count,CK5Mask|Number_Object_Number,Cytoplasm|Parent_CK5Mask,Cytoplasm|Parent_NuclearMasks,Cytoplasm|Number_Object_Number,Cytoplasm|Intensity_MassDisplacement_RELA,Cytoplasm|Intensity_MassDisplacement_P63,Cytoplasm|Intensity_MinIntensity_P63,Cytoplasm|Intensity_MinIntensity_RELA,Cytoplasm|Intensity_StdIntensity_RELA,Cytoplasm|Intensity_StdIntensity_P63,Cytoplasm|Intensity_IntegratedIntensityEdge_P63,Cytoplasm|Intensity_IntegratedIntensityEdge_RELA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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